PsychoPy2experiment version="2022.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 0.1922, 0.1765, -0.0118
  expName = priming
  keyboardBackend = ioHub
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Routines
  Routine PrimeLDT
    TextComponent PrimeDisplay
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $prime
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    TextComponent StimuliDisplay
      letterHeight = 0.05
      startVal [time (s)] = 2.5
      text [set every repeat] = $stimuli
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      store = first key
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    NoiseStimComponent noise
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.00625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    NoiseStimComponent noise_2
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.00625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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  Routine Instructions
    TextComponent Instructionset
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        INSTRUCTIONS

        Press " Y " for words

        Press " N " for non-words

        Press " space " to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating
        enter " space " to exit
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = PRIMEwORDS.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime': 'winter', 'stimuli': 'BLANKET'},
      {'prime': 'food', 'stimuli': 'RESTURENT'},
      {'prime': 'bike', 'stimuli': 'ROAD'},
      {'prime': 'door', 'stimuli': 'HOUSE'},
      {'prime': 'chair', 'stimuli': 'TABLE'},
      {'prime': 'jungle', 'stimuli': 'LION'},
      {'prime': 'needle', 'stimuli': 'THREAD'},
      {'prime': 'branf', 'stimuli': 'BRANT'},
      {'prime': 'pipsi', 'stimuli': 'PIPSO'},
      {'prime': 'borel', 'stimuli': 'BORET'}]
    Routine PrimeLDT
  LoopTerminator trials
  Routine End
